begintemplate stylized_typeC

public init, connect_sections, size_sections, append_sections, define_synapses
public mechinit, insert_mechs, set_biophys, get_root
public  pre_list, connect_pre, is_art, is_connected, gid, randi
public soma, dend, apic, axon
public all, soma_list, axon_list, dendrite_list
public all, somatic, basal, apical, axonal
public x, y, z, position, myroot, myrootsec, Vrest
public NumSoma, NumDend, NumAxon
public SynRecord

NumSoma = 1


// strings
strdef myroot, myname

// objects
objref syn, pre_list, templist, rootlist, myrootsec, this, rr, rotation
objref noise_exc, noise_inh, cclA
objref noiseRandObj_exc, noiseRandObj_inh




// external variables
//external numCellTypes, cellType, VClampVector

create soma[1]
create dend[1]
create apic[1]
create axon[11]
create hill[1]
	
proc init(){

	//gid = $1
	//randi = $2
	
	// morphology
	connect_sections()	// local fcn: connect soma, dendrites, axon initial segment
	size_sections()		// local fcn: set the size dimensions of each section
	define_shape()		// builtin fcn: fill in 3d info for sections defined by only L and diam, translate 3d points for consistency with their connections 
  	append_sections()	// local fcn: append all sections to the section list
	set_nseg()			// local fcn: set the number of segments in each section
	//get_root()			// local fcn: perform morphology checks
	//add_noise()

	// electrophysiology
	mechinit()			// local fcn: set values for max conductances and reversal potentials of ion channels and other ephys parameters that are subject to fitting
	insert_mechs()		// local fcn: insert ion channels and actually set values determined in the mechinit fcn
	set_chanparams()	// local fcn: after all channels have been inserted, then their other parameters can be set	

	// synapses
	pre_list = new List() // define a list for the presynaptic connections	
	//define_synapses($3)	// local fcn: define all possible synaptic connections received by this cell
}


proc connect_sections() { local i
	connect apic[0](0), soma[0](1)
	connect dend[0](0), soma[0](0)
	connect hill[0](0), soma[0](0.5)
	connect axon[0](0), hill[0](1)
	for i=1,10{connect axon[i](0), axon[i-1](1)}
}



proc size_sections() {local thetaz
	//Rotation about z axis
	objref rotation
	//rotation = new Random($1)
	//thetaz = rotation.uniform(0,2*PI)
	thetaz = 0
	//print "thetaz: ", thetaz
	//print "pyramidal soma points: ",12.5*sin(thetaz),12.5*cos(thetaz),25*sin(thetaz),25*cos(thetaz)
		soma[0] {pt3dclear()
			pt3dadd(0, 0, 0, 25.413)
			pt3dadd(0, 25.413*sin(thetaz), 25.413*cos(thetaz), 25.413)
			nseg = 1
		}

		apic[0] {pt3dclear()
			pt3dadd(0, 25.413*sin(thetaz), 25.413*cos(thetaz), 4.324)
			pt3dadd(0, 475.413*sin(thetaz), 475.413*cos(thetaz), 4.324)
			nseg = 7
		}

		dend[0] {pt3dclear()
			pt3dadd(0, 0, 0, 14.67)
			pt3dadd(0, -150*sin(thetaz), -150*cos(thetaz), 14.67)
			nseg = 8    
		}

		hill[0]{pt3dclear()
			pt3dadd(-12.707*cos(thetaz),-12.707*sin(thetaz),0,6)
			pt3dadd(-14.707*cos(thetaz),-14.707*sin(thetaz),0,5)
			pt3dadd(-16.707*cos(thetaz),-16.707*sin(thetaz),0,4)
			pt3dadd(-18.707*cos(thetaz),-18.707*sin(thetaz),0,3)
			pt3dadd(-20.707*cos(thetaz),-20.707*sin(thetaz),0,2)
			pt3dadd(-22.707*cos(thetaz),-22.707*sin(thetaz),0,1.3)
			nseg = 10
		}
		
		for i=1,10{
			axon[i-1] {pt3dclear()
				pt3dadd((-22.707-5*(i-1))*cos(thetaz),(-22.707-5*(i-1))*sin(thetaz),0, 1.22)
				pt3dadd((-27.707-5*(i-1))*cos(thetaz),(-27.707-5*(i-1))*sin(thetaz),0, 1.22)
			}
		}

		axon[10]{pt3dclear()
			pt3dadd(-72.707*cos(thetaz),-72.707*sin(thetaz),0,1.22)
			pt3dadd(-172.707*cos(thetaz),-172.707*sin(thetaz),0,1.22)
		}

}


objref all, somatic,axonal,basal,apical
proc append_sections() { local i
	objref all, somatic,axonal,basal,apical

	all = new SectionList()
	somatic = new SectionList()
	axonal = new SectionList()
	basal = new SectionList()
	apical = new SectionList()
	
	soma all.append()
	soma somatic.append()
	
	dend[0] all.append()
	dend[0] basal.append()
	apic[0] all.append()
	apic[0] apical.append()

	axon[0] all.append()
	axon[1] all.append()
	axon[2] all.append()
	axon[3] all.append()
	axon[4] all.append()
	
	axon[5] all.append()
	axon[6] all.append()
	axon[7] all.append()
	axon[8] all.append()
	axon[9] all.append()
	axon[10] all.append()

	
	axon[9] axonal.append()

	print "appended sections"

}


external lambda_f
proc set_nseg() {
  	forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

proc mechinit() {

		
		// BIOPHYSICS //
		Vrest = -70
		Cm = 0.5
		RaAll= 150
		RaSoma= 150
		RaDend = 150
		RaAx = 150

		gna = 0.015
		gnap = 0.000555 // 0.000551 
		gkdr = 0.002//0.002 
		ghd = 1.5e-5//1.5e-5
		gca = 5.5e-4 
		gm = 0.00224 // 0.00222  
		gsAHP = 0.0002//0.0012
		gkap = 0.002 
		gleak = 2.5e-5 
		gleak_dend = 1.57*3.0e-5
		nash=10
		Vrest = -70
		celsius = 31.0 

		Rm = 30000
		gleak = 1/Rm
		Ena = 60
		gna12_soma = 80
		gna12_dend = 80 
		gna12_ais_max = 3200   // Nav1.2 
		gna16_ais_max = 3200   // Nav1.6
		gna16_nakeaxon= 300    
		gna12_myelin=20       // Nav1.2 at myelins
		gna16_node = 3200     // Nav1.6 at node
	  
	 	// Hu et al. half activation voltages
		vhalf_na16 = -47
		vhalf_na12 = -30
		vhalf_na = -30
 
		// Kv
		Ek = -80  
		gkv_soma = 20
		gkv_dend = 10 
		gkv_axon = 1000
	  
		// Km
		gkm = .3
		gkm_soma = gkm
	  
		// Kca
		gkca = 3
		gkca_soma = gkca
	  
		// Ca
		Eca=140
		gca = .3
		gca_soma = gca
}

proc insert_mechs(){
		forall {
			insert na gbar_na=0
			insert na12  gbar_na12=0
			insert na16  gbar_na16=0
			insert kv    gbar_kv=0
			insert km    gbar_km=0
			insert kca   gbar_kca=0
			insert ca    gbar_ca=0
			insert cav31 gbar_cav31=0
			insert capool
		}
		// Added by Hu et al. 2009
		vshift_na12 = -35 - vhalf_na12 -10  // negative shift of input voltage, high threshold  -30mV    
		vshift_na16 = -35 - vhalf_na16 -10    // positive shift of input voltage, low threshold  -43mV
		vshift_na = -35 - vhalf_na -10  // the same as Na12
		
		forall if(ismembrane("k_ion")) ek = Ek
		forall if(ismembrane("na_ion")) ena = Ena
		forall if(ismembrane("ca_ion")) {
			eca = Eca
			ion_style("ca_ion",0,1,0,0,0)
			vshift_ca = 0
		}
		
		
		dend[0]{
			insert pas e_pas = Vrest  g_pas = gleak Ra=RaDend cm = 1.5
			  gbar_na = gna12_dend    // 80
			  gbar_kv = gkv_dend        // 20                            
			  gbar_km  = gkm            // 0.3                           
			  gbar_kca = gkca           // 0.3                           
			  gbar_ca = gca             // 0.3                           
			  insert cad                // Internal calcium concentration mechanism only at somatodendritic region.
			insert capool taucas = 1000  fcas_capool = 0.05 
		}


		apic[0]{
			insert pas e_pas = Vrest  g_pas = gleak Ra=RaDend cm = 1.5
			  gbar_na = gna12_dend    // 80
			  gbar_kv = gkv_dend        // 20                            
			  gbar_km  = gkm            // 0.3                           
			  gbar_kca = gkca           // 0.3                           
			  gbar_ca = gca             // 0.3                           
			insert capool taucas = 1000  fcas_capool = 0.05 
			  insert cad                // Internal calcium concentration mechanism only at somatodendritic region.
		}

		soma[0]{
		
			insert pas e_pas = Vrest  g_pas = gleak Ra=RaDend cm = 1.5
			  gbar_na=gna12_soma          // 80
			  gbar_kv = gkv_soma            // 20 
			  gbar_km = gkm_soma            // 0.3
			  gbar_kca = gkca_soma          // 0.3
			  gbar_ca = gca_soma            // 0.3
			insert capool taucas = 1000  fcas_capool = 0.05 

		}


		
		hill[0]{
			insert pas e_pas = Vrest  g_pas = gleak Ra=RaDend cm = 1.0
			gbar_cav31 = 0//0.008
		}

		for i=0,9 axon[i] {
			insert pas e_pas = Vrest  g_pas = gleak Ra=RaDend cm = Cm
			  gbar_cav31 = 0.008
		}

		axon[10]{
			insert pas e_pas = Vrest  g_pas = gleak Ra=RaDend cm = Cm
		}
		
		hill[0].gbar_na12 = gna12_ais_max*	1	*	0.8
		axon[0].gbar_na12 = gna12_ais_max*0.96*1
		axon[1].gbar_na12 = gna12_ais_max*0.9*1                      
		axon[2].gbar_na12 = gna12_ais_max*0.75*1                    
		axon[3].gbar_na12 = gna12_ais_max*0.55*0.95              
		axon[4].gbar_na12 = gna12_ais_max*0.366985879*0.880142857  
		axon[5].gbar_na12 = gna12_ais_max*0.2*0.75                 
		axon[6].gbar_na12 = gna12_ais_max*0.100330761*0.647857143  
		axon[7].gbar_na12 = gna12_ais_max*0.011532125*0.520285714 
		axon[8].gbar_na12 = gna12_ais_max*0*0.428571429            
		axon[9].gbar_na12 = gna12_ais_max*0*0.342857143 
		axon[10].gbar_na12 = gna12_ais_max*0*0.342857143 
			
		hill[0].gbar_na16 = gna16_ais_max	    *	0	*	0.8
		axon[0].gbar_na16 = gna16_ais_max	*	0.04	*	1   
		axon[1].gbar_na16 = gna16_ais_max	*	0.1	*	1   
		axon[2].gbar_na16 = gna16_ais_max	*	0.25	*	1   
		axon[3].gbar_na16 = gna16_ais_max	*	0.45	*	0.95   
		axon[4].gbar_na16 = gna16_ais_max	*	0.633014121	*	0.880142857   
		axon[5].gbar_na16 = gna16_ais_max	*	0.8	*	0.75   
		axon[6].gbar_na16 = gna16_ais_max	*	0.899669239	*	0.647857143   
		axon[7].gbar_na16 = gna16_ais_max	*	0.988467875	*	0.520285714   
		axon[8].gbar_na16 = gna16_ais_max	*	1	*	0.428571429   
		axon[9].gbar_na16 = gna16_ais_max	*	1	*	0.342857143  
		axon[10].gbar_na16 = gna16_ais_max	*	1	*	0.342857143  
						
		hill[0].gbar_kv = gkv_axon	*	0.1
		axon[0].gbar_kv = gkv_axon	*	0.2 
		axon[1].gbar_kv = gkv_axon	*	0.3 
		axon[2].gbar_kv = gkv_axon	*	0.4 
		axon[3].gbar_kv = gkv_axon	*	0.5 
		axon[4].gbar_kv = gkv_axon	*	0.6 
		axon[5].gbar_kv = gkv_axon	*	0.7 
		axon[6].gbar_kv = gkv_axon	*	0.8 
		axon[7].gbar_kv = gkv_axon	*	0.9
		axon[8].gbar_kv = gkv_axon	*	1
		axon[9].gbar_kv = gkv_axon	*	1
		axon[10].gbar_kv = gkv_axon	*	1
}	
	
proc set_chanparams() {
	forsec all {
		
	}
}


init()
endtemplate stylized_typeC
